PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = demo
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Som
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    SoundComponent intro
      forceEndRoutine = False
      sound [set every repeat] = /Users/brunomiguel/Downloads/data/01/0_01_0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine test
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = /Users/brunomiguel/Library/CloudStorage/GoogleDrive-migueldireito@gmail.com/O meu disco/RealTime.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Som
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine test
    Routine trial
  LoopTerminator trials
